PsychoPy2experiment version="2020.1.2"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['SN'], expName, expInfo['date'])
  Experiment info = {'SN': '99', 'Gender': 'f'}
  Full-screen window = False
  Monitor = monitor_v1
  Screen = 1
  Units = pix
  Use version = 2020.1.2
  Window size (pixels) = [1920, 1080]
  color = $[1,1,1]
  expName = srcMEM_v1
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Routines
  Routine inst1
    TextComponent instr1
      color = black
      font = NotoSansCJKkr-Medium
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        학습 과제를 시작합니다.

        제시되는 물체와 위치를 함께 외워주세요.
        동시에, 물체가 생물인지, 비생물인지 반응해주세요.

        생물이면 "z", 비생물이면 "m"을 눌러주세요.

        시작하려면 "space"키를 누르세요.
    KeyboardComponent insrt1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine break_1
    CodeComponent b1_code
      Code Type = Py
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      Begin Experiment:
        maxBT = 30
      Each Frame:
        b1_time = int(maxBT - break_1Clock.getTime())
    TextComponent b1_inst
      color = black
      durationEstim = 30
      font = NotoSansCJKkr-Medium
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = maxBT
      units = norm
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      text:
        쉬는 시간입니다.

        눈과 손의 피로를 풀어주세요.

        아래의 시간이 끝나면 자동으로 다음 과제가 시작됩니다.
    TextComponent b1_timeRemaining
      color = black
      durationEstim = 30
      font = NotoSansCJKkr-Medium
      letterHeight = 0.05
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = maxBT
      text [set every frame] = $'남은 시간: {time}'.format(time=b1_time)
      units = norm
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    KeyboardComponent b1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = maxBT
      store = nothing
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  Routine end
    TextComponent endM
      color = black
      font = NotoSansCJKkr-Medium
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        실험이 종료되었습니다.

        참여해주셔서 감사합니다.

        실험자를 불러주세요.
    KeyboardComponent endM_resp
      allowedKeys = 'q'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial1
    PolygonComponent fix1
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      saveStartStop = False
      shape = cross
      size = (0.031250, 0.055556)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = norm
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    PolygonComponent rect1_1
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos = (-0.5, 0.5)
      saveStartStop = False
      shape = rectangle
      size = (0.312, 0.554)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      units = norm
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    PolygonComponent rect1_2
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos = (0.5, 0.5)
      saveStartStop = False
      shape = rectangle
      size = (0.312, 0.554)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      units = norm
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    PolygonComponent rect1_3
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos = (-0.5, -0.5)
      saveStartStop = False
      shape = rectangle
      size = (0.312, 0.554)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      units = norm
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    PolygonComponent rect1_4
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos = (0.5, -0.5)
      saveStartStop = False
      shape = rectangle
      size = (0.312, 0.554)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      units = norm
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    ImageComponent LearnIM
      durationEstim = 1.5
      image [set every repeat] = $IMname
      ori = 0 
      pos [set every repeat] = (LocPosX, LocPosY)
      saveStartStop = False
      size = (0.311, 0.553)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      units = norm
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    KeyboardComponent t1_resp
      allowedKeys = 'z','m'
      correctAns = $CorrAnsCat
      durationEstim = 1.5
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine start
    TextComponent startM
      color = black
      font = NotoSansCJKkr-Medium
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        실험을 시작합니다.

        본 실험은 2개의 과제로 구성되어 있습니다.

        1) 학습 과제: 제시되는 그림과 위치를 연합 학습합니다.

        2) 검사: 학습하였던 그림-위치 목록의 기억을 검사합니다.
               제시되는 그림이 어느 위치에 제시되었는지 반응해주세요.

        시작하려면 "space"를 누르세요.
    KeyboardComponent startM_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Experiment:
        #msg variable just needs some value at start
        msg = ''
        corr = []
      Begin Routine:
        if t2_resp.corr:#stored on last run routine
          msg="맞았습니다! RT=%.3f" %(t2_resp.rt)
        else:
          msg="틀렸습니다"

        # track (up to) the last 5 trials
        corr.append(t2_resp.corr)
        nCorr = sum(corr[-5:])
        nResps = len(corr[-5:])
        msg += "({} out of {} correct)".format(nCorr, nResps)
    TextComponent feedbackM
      color = black
      durationEstim = 1.5
      letterHeight = 30
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg
      units = pix
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  Routine inst2
    TextComponent instr2
      color = black
      font = NotoSansCJKkr-Medium
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        검사 과제를 시작합니다.

        제시되는 물체를 보고 물체가 어느 위치에 제시되었었는지 키를 눌러주세요.

        우측 숫자 패드를 이용하여 사분면을 반응해주세요.

        제1사분면 - 4
        제2사분면 - 5
        제3사분면 - 1
        제4사분변 - 2

        시작하려면 "space"를 누르세요.
    KeyboardComponent insrt3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial2
    PolygonComponent fix2
      durationEstim = 10
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      saveStartStop = False
      shape = cross
      size = (0.031250, 0.055556)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent rect2_1
      durationEstim = 10
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos = (-0.5, 0.5)
      saveStartStop = False
      shape = rectangle
      size = (0.312, 0.554)
      startVal [time (s)] = 0
      units = norm
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    PolygonComponent rect2_2
      durationEstim = 10
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos = (0.5, 0.5)
      saveStartStop = False
      shape = rectangle
      size = (0.312, 0.554)
      startVal [time (s)] = 0
      units = norm
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    PolygonComponent rect2_3
      durationEstim = 10
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos = (-0.5, -0.5)
      saveStartStop = False
      shape = rectangle
      size = (0.312, 0.554)
      startVal [time (s)] = 0
      units = norm
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    PolygonComponent rect2_4
      durationEstim = 10
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos = (0.5, -0.5)
      saveStartStop = False
      shape = rectangle
      size = (0.312, 0.554)
      startVal [time (s)] = 0
      units = norm
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    ImageComponent testIM
      durationEstim = 9.5
      image [set every repeat] = $IMname
      ori = 0 
      pos [set every repeat] = (0, 0)
      saveStartStop = False
      size = (0.311, 0.553)
      startVal [time (s)] = 0.5
      units = norm
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    KeyboardComponent t2_resp
      allowedKeys = 'num_4','num_5','num_1','num_2'
      correctAns = $CorrAnsLoc
      durationEstim = 9.5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine break_2
    CodeComponent b2_code
      Code Type = Py
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      Each Frame:
        b2_time = int(maxBT - break_2Clock.getTime())
    TextComponent b2_inst
      color = black
      durationEstim = 30
      font = NotoSansCJKkr-Medium
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = maxBT
      units = norm
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      text:
        쉬는 시간입니다.

        눈과 손의 피로를 풀어주세요.

        아래의 시간이 끝나면 자동으로 다음 과제가 시작됩니다.
    TextComponent b2_timeRemaining
      color = black
      durationEstim = 30
      font = NotoSansCJKkr-Medium
      letterHeight = 0.05
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = maxBT
      text [set every frame] = $'남은 시간: {time}'.format(time=b3_time)
      units = norm
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    KeyboardComponent b2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = maxBT
      store = nothing
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Flow
  Routine start
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine inst1
    LoopInitiator t1_trials loopType="TrialHandler"
      conditionsFile = t1_design.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('IMname', 'stim/living/living001.jpg'), ('Category', 1), ('CorrAnsCat', 'z'), ('Location', 1), ('LocPosX', -0.5), ('LocPosY', 0.5), ('CorrAnsLoc', 4)]),
        OrderedDict([('IMname', 'stim/living/living002.jpg'), ('Category', 1), ('CorrAnsCat', 'z'), ('Location', 2), ('LocPosX', 0.5), ('LocPosY', 0.5), ('CorrAnsLoc', 5)]),
        OrderedDict([('IMname', 'stim/living/living003.jpg'), ('Category', 1), ('CorrAnsCat', 'z'), ('Location', 3), ('LocPosX', -0.5), ('LocPosY', -0.5), ('CorrAnsLoc', 1)]),
        OrderedDict([('IMname', 'stim/living/living004.jpg'), ('Category', 1), ('CorrAnsCat', 'z'), ('Location', 4), ('LocPosX', 0.5), ('LocPosY', -0.5), ('CorrAnsLoc', 2)]),
        OrderedDict([('IMname', 'stim/living/living005.jpg'), ('Category', 1), ('CorrAnsCat', 'z'), ('Location', 1), ('LocPosX', -0.5), ('LocPosY', 0.5), ('CorrAnsLoc', 4)]),
        OrderedDict([('IMname', 'stim/living/living006.jpg'), ('Category', 1), ('CorrAnsCat', 'z'), ('Location', 2), ('LocPosX', 0.5), ('LocPosY', 0.5), ('CorrAnsLoc', 5)]),
        OrderedDict([('IMname', 'stim/living/living007.jpg'), ('Category', 1), ('CorrAnsCat', 'z'), ('Location', 3), ('LocPosX', -0.5), ('LocPosY', -0.5), ('CorrAnsLoc', 1)]),
        OrderedDict([('IMname', 'stim/living/living008.jpg'), ('Category', 1), ('CorrAnsCat', 'z'), ('Location', 4), ('LocPosX', 0.5), ('LocPosY', -0.5), ('CorrAnsLoc', 2)]),
        OrderedDict([('IMname', 'stim/nonliving/nonliving001.jpg'), ('Category', 2), ('CorrAnsCat', 'm'), ('Location', 1), ('LocPosX', -0.5), ('LocPosY', 0.5), ('CorrAnsLoc', 4)])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
      Routine trial1
    LoopTerminator t1_trials
    Routine break_1
    Routine inst2
    LoopInitiator t2_trials loopType="TrialHandler"
      conditionsFile = t1_design.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine trial2
    LoopTerminator t2_trials
    Routine break_2
  LoopTerminator blocks
  Routine end
